CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|C:\\\\Users\\\\emilr\\\\Downloads
    Name of the file:image_list (5).csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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notes:['Identify the nuclei from the DNA image. Some manual adjustment of the threshold correction factor and  smoothing filter size is required to optimize segmentation.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,28
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:6
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.04,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:3|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.02,1
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    Two-class or three-class thresholding?:Two classes
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
IdentifyTertiaryObjects:[module_num:4|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects found using the Progagtion method.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:5|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notes:['Measure intensity features from nuclei, cell and cytoplasm objects against the corrected DNA and GFP images.']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
    Hidden:1
    Select an image to measure:DAPI
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:6|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
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:7|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureObjectNeighbors:[module_num:8|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoplasm|Location_Center_Y,Cytoplasm|Location_Center_X,Cytoplasm|Number_Object_Number,Cytoplasm|Parent_Cells,Cytoplasm|Parent_Nuclei,Image|Plate,Image|ImageNumber,Image|ImageId,Image|Well,Image|PlateId,Image|ImageName,Image|Field,Image|WellId,Image|Row,Nuclei|Neighbors_SecondClosestDistance_Expanded,Nuclei|Neighbors_FirstClosestDistance_Expanded,Nuclei|Neighbors_FirstClosestObjectNumber_Expanded,Nuclei|Neighbors_SecondClosestObjectNumber_Expanded,Nuclei|Neighbors_PercentTouching_Expanded,Nuclei|Neighbors_AngleBetweenNeighbors_Expanded,Nuclei|Neighbors_NumberOfNeighbors_Expanded,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Stats_
    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Cytoplasm
    Name the output image:GFP_
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:Nuclei
    Name the output image:DAPI_
    Select the color format:Grayscale
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:DAPI_
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:DAPI_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:GFP_
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GFP_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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